PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  expName = nature-urban-fractal
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine control_video
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    MovieComponent control_video_component
      backend = ffpyplayer
      forceEndRoutine = True
      movie = stimuli/videos/control.mp4
      size = (1, 0.6)
      startVal [time (s)] = 0.2
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    MarkEvents MarkEvents plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = control_video_component
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useQuitKeys = True
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    CodeComponent control_video_code
      Code Type = Py
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      Begin Routine:
        time_recorded = False
      Each Frame:
        if control_video_component.status == STARTED and not time_recorded:
            win.callOnFlip(saveTime, 'control_video_psychopy')
            time_recorded = True
  Routine parent_video
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    MovieComponent parent_video_component
      backend = ffpyplayer
      forceEndRoutine = True
      movie = stimuli/videos/parent.mp4
      size = (1, 0.6)
      startVal [time (s)] = 0.2
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    MarkEvents MarkEvents_2 plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = parent_video_component
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = condition
      useQuitKeys = True
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    CodeComponent parent_video_code
      Code Type = Py
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      Begin Routine:
        time_recorded = False
      Each Frame:
        if parent_video_component.status == STARTED and not time_recorded:
            win.callOnFlip(saveTime, 'control_video_psychopy')
            time_recorded = True
  Routine slideshow
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    ImageComponent image
      image [set every repeat] = $'stimuli/images/' + condition + '/' + image_name + '.JPG'
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2
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    MarkEvents MarkEvents_3 plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = image
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = True
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = condition, image_name
      useQuitKeys = True
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        #Add this routine in a loop with $'stimuli/' + condition + '.csv' conditions file,
        # with random and is_trials true (turn conditions_loop's is_trials off too)
        start_time_recorded = False
        end_time_recorded = False
        print(image_name)
      Each Frame:
        if image.status == STARTED and not start_time_recorded:
            win.callOnFlip(saveTime, 'image_start') #'image_%s_%i' %(condition, image_loop.thisN)
            start_time_recorded = True

        if image.status == FINISHED and not end_time_recorded:
            win.callOnFlip(saveTime, 'image_end') #'image_%s_%i' %(condition, image_loop.thisN)
            end_time_recorded = True
  Routine eyelink_setup
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    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = False
      dummyMode = False
      hostAddress = 100.1.1.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV5
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = stimuli/videos/fixation_faststart.mov
      targetSize = 250
      targetType = movie
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    CodeComponent timer_code
      Code Type = Py
      Begin Experiment:
        import time

        def saveTime(label=""):
            system_time = time.time()
            # globalClock is the format string ('float') until run() builds the real Clock,
            # so don't call this until Begin Routine
            psychopy_time = globalClock.getTime() # same clock as _ONSET_TIME
            thisExp.addData('sync_system_%s' % label, system_time)
            thisExp.addData('sync_psychopy_%s' % label, psychopy_time)

            try:
                el_tracker = pylink.getEYELINK()
                el_tracker.sendMessage('SYNC %s SYSTEM %.6f PSYCHOPY %.6f' % (label, system_time, psychopy_time))
            except Exception as e:
                logging.warning('EDF sync message failed (%s): %s' % (label, e))
      Begin Routine:
        saveTime('session_start')
      End Experiment:
        saveTime('end_experiment')
  Routine intro
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        Press SPACEBAR to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine eyelink_start_image
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    HostDrawing HostDrawing_3 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = image
      disabled = True
      imagesToHostBackdrop = $"stimuli/images/" + condition + "/" + image_name + ".jpg", image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    StartRecording StartRecord_3 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine end_experiment
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    TextComponent fin_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = The experiment is now over, please contact the experimenter
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  Routine clapperboard
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    KeyboardComponent space_key
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
      syncScreenRefresh = False
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    KeyboardComponent return_key
      allowedKeys = 'return'
      disabled = True
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent sync_code
      Code Type = Py
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      Begin Experiment:
        clap_kb = keyboard.Keyboard()
      Begin Routine:
        time_recorded = False
        n_presses = 0
        clap_kb.clearEvents()
      Each Frame:
        keys = clap_kb.getKeys(keyList=['space', 'return'], waitRelease=False)
        for k in keys:
            if k.name == 'space':
                saveTime('clap')
                thisExp.addData('clapperboard_press_time', k.tDown)
                # https://discourse.psychopy.org/t/what-timer-does-the-return-value-of-win-flip-use/44512
                wall_press = time.time() - (logging.defaultClock.getTime() - k.tDown)
                thisExp.addData('clapperboard_system_press_time', wall_press)
                time_recorded = True
                n_presses = n_presses+1
            if k.name == 'return' and time_recorded:
                continueRoutine = False
    TextComponent exit_sync_instr
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every frame] = $f'Tap the Move 4 on the SPACEBAR to record event time.\n\nPresses: {n_presses}\n\nPress ENTER to continue.'
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  Routine blank
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  Routine single_slideshow
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    ImageComponent image_1
      image [set every repeat] = $preloaded[0]
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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    ImageComponent image_2
      image [set every repeat] = $preloaded[1]
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2.0
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    ImageComponent image_3
      image [set every repeat] = $preloaded[2]
      size = (0.5, 0.5)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2.0
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    ImageComponent image_4
      image [set every repeat] = $preloaded[3]
      size = (0.5, 0.5)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 2.0
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    ImageComponent image_5
      image [set every repeat] = $preloaded[4]
      size = (0.5, 0.5)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 2.0
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    ImageComponent image_6
      image [set every repeat] = $preloaded[5]
      size = (0.5, 0.5)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 2.0
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    ImageComponent image_7
      image [set every repeat] = $preloaded[6]
      size = (0.5, 0.5)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 2.0
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    ImageComponent image_8
      image [set every repeat] = $preloaded[7]
      size = (0.5, 0.5)
      startVal [time (s)] = 14
      stopVal [duration (s)] = 2.0
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    ImageComponent image_9
      image [set every repeat] = $preloaded[8]
      size = (0.5, 0.5)
      startVal [time (s)] = 16
      stopVal [duration (s)] = 2.0
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    ImageComponent image_10
      image [set every repeat] = $preloaded[9]
      size = (0.5, 0.5)
      startVal [time (s)] = 18
      stopVal [duration (s)] = 2.0
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    ImageComponent image_11
      image [set every repeat] = $preloaded[10]
      size = (0.5, 0.5)
      startVal [time (s)] = 20
      stopVal [duration (s)] = 2.0
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    ImageComponent image_12
      image [set every repeat] = $preloaded[11]
      size = (0.5, 0.5)
      startVal [time (s)] = 22
      stopVal [duration (s)] = 2.0
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
    MarkEvents MarkEvents_4 plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = image_1, image_2, image_3, image_4, image_5, image_6, image_7, image_8, image_9, image_10, image_11, image_12, image_13, image_14, image_15, image_16, image_17, image_18, image_19, image_20, image_21, image_22, image_23, image_24, image_25, image_26, image_27, image_28, image_29, image_30, image_31
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = True
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = condition, trial_image_names
      useQuitKeys = True
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  Routine fixation_parent
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    MovieComponent parent_video_fixation_movie
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = True
      loop = True
      movie = stimuli/videos/fixation_video.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
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    CodeComponent fixation_audio_parent
      Code Type = Py
      Begin Experiment:
        from psychopy import sound
        fixation_loop_sound_parent = sound.Sound('stimuli/videos/fixation_audio.wav', loops=-1, stereo=True, name='fixation_loop_sound_parent')
        fixation_loop_sound_parent.setVolume(1.0)
      Begin Routine:
        fixation_sound_started_parent = False
      Each Frame:
        if parent_video_fixation_movie.status == STARTED and not fixation_sound_started_parent:
            fixation_loop_sound_parent.play()
            fixation_sound_started_parent = True
      End Routine:
        fixation_loop_sound_parent.stop()
    GazeTrigger GazeTrigger_2 plugin="psychopy-eyelink"
      gazeWindowPosition = [0,0]
      gazeWindowSize = [100, 100]
      minimumDuration = 0.5
      screenUnitType = pix
      sendHostBackdropDrawCommand = True
      startVal [time (s)] = 0.2
      syncScreenRefresh = False
      within = True
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  Routine fixation_control
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    MovieComponent control_video_fixation_movie
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = True
      loop = True
      movie = stimuli/videos/fixation_video.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
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    CodeComponent fixation_audio_control
      Code Type = Py
      Begin Experiment:
        from psychopy import sound
        fixation_loop_sound_control = sound.Sound('stimuli/videos/fixation_audio.wav', loops=-1, stereo=True, name='fixation_loop_sound_control')
        fixation_loop_sound_control.setVolume(1.0)
      Begin Routine:
        fixation_sound_started_control = False
      Each Frame:
        if control_video_fixation_movie.status == STARTED and not fixation_sound_started_control:
            fixation_loop_sound_control.play()
            fixation_sound_started_control = True
      End Routine:
        fixation_loop_sound_control.stop()
    GazeTrigger GazeTrigger plugin="psychopy-eyelink"
      gazeWindowPosition = [0,0]
      gazeWindowSize = [100, 100]
      minimumDuration = 0.5
      screenUnitType = pix
      sendHostBackdropDrawCommand = True
      startVal [time (s)] = 0.2
      syncScreenRefresh = False
      within = True
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  Routine fixation_slideshow
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    MovieComponent slideshow_fixation_movie
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = True
      loop = True
      movie = stimuli/videos/fixation_video.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = .2
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    CodeComponent fixation_audio_slideshow
      Code Type = Py
      Begin Experiment:
        from psychopy import sound
        fixation_loop_sound_slideshow = sound.Sound('stimuli/videos/fixation_audio.wav', loops=-1, stereo=True, name='fixation_loop_sound_slideshow')
        fixation_loop_sound_slideshow.setVolume(1.0)
      Begin Routine:
        fixation_sound_started_slideshow = False
      Each Frame:
        if slideshow_fixation_movie.status == STARTED and not fixation_sound_started_slideshow:
            fixation_loop_sound_slideshow.play()
            fixation_sound_started_slideshow = True
      End Routine:
        fixation_loop_sound_slideshow.stop()
    GazeTrigger GazeTrigger_3 plugin="psychopy-eyelink"
      gazeWindowPosition = [0, 0]
      gazeWindowSize = [100, 100]
      minimumDuration = .5
      screenUnitType = pix
      sendHostBackdropDrawCommand = True
      startVal [time (s)] = .2
      syncScreenRefresh = False
      within = True
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  Routine eyelink_stop_control
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    StopRecording StopRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine eyelink_stop_parent
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    StopRecording StopRecord_2 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine eyelink_start_parent
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    HostDrawing HostDrawing_2 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = parent_video_component
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    StartRecording StartRecord_2 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine eyelink_start_control
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    HostDrawing HostDrawing plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = control_video_component
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    StartRecording StartRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine eyelink_start_parent_video
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    HostDrawing HostDrawing_4 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = parent_video_component
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    StartRecording StartRecord_4 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine eye_stop_parent_video
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    StopRecording StopRecord_4 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine eye_start_slideshow
    CodeComponent code
      Code Type = Py
      Begin Routine:
        stim_dir = "stimuli/images/" + condition
        preloaded = []
        trial_image_names = []
        image_paths = os.listdir(stim_dir)
        n_images = len(image_paths)
        image_order = np.arange(n_images)
        np.random.shuffle(image_order)
        for i in image_order:
            f = image_paths[i]
            if f.lower().endswith(('.png', '.jpg', '.jpeg', '.bmp')):
                preloaded_image = Image.open(os.path.join(stim_dir, f)).convert('RGB')
                preloaded.append(preloaded_image)
                trial_image_names.append(f)

        assert len(preloaded) == 31, f"{condition}: expected 31 images, got {len(preloaded)}"

        thisExp.addData('image_names', trial_image_names)
        win.clearBuffer()  # discard the warm-up draws (nothing shown)

        # LOG trials to check
        print(condition, image_paths, "shuffled to:", trial_image_names)
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    HostDrawing HostDrawing_5 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = image_1, image_2, image_3, image_4, image_5, image_6, image_7, image_8, image_9, image_10, image_11, image_12, image_13, image_14, image_15, image_16, image_17, image_18, image_19, image_20, image_21, image_22, image_23, image_24, image_25, image_26, image_27, image_28, image_29, image_30, image_31
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    StartRecording StartRecord_5 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine eyelink_stop_slideshow
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    StopRecording StopRecord_3 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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Flow
  Routine intro
  Routine eyelink_setup
  Routine blank
  Routine clapperboard
  Routine eyelink_start_control
  Routine fixation_control
  Routine control_video
  Routine eyelink_stop_control
  LoopInitiator conditions_loop loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'nature')]),
      OrderedDict([('condition', 'urban')]),
      OrderedDict([('condition', 'nature_fractal')]),
      OrderedDict([('condition', 'urban_fractal')])]
    Routine eyelink_start_parent_video
    Routine fixation_parent
    Routine parent_video
    Routine eye_stop_parent_video
    Routine eye_start_slideshow
    Routine fixation_slideshow
    Routine single_slideshow
    Routine eyelink_stop_slideshow
  LoopTerminator conditions_loop
  Routine clapperboard
  Routine end_experiment
